PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  expName = method-of-adjustment
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    GratingComponent grating
      contrast [set every frame] = np.exp(-1)
      mask = raisedCos
      phase [set every repeat] = 360*np.random.rand()
      pos [set every repeat] = (-control*.15, 0)
      saveStartStop = False
      sf = 1
      size = (0.15, 0.15)
      startVal [time (s)] = .250
      tex = sin
      texture resolution = 512
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    MouseComponent adjust
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.25
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    CodeComponent update_control
      Code Type = Auto->JS
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      Begin Routine:
        adjust.setPos((0,-.5+.5*direction))
      Each Frame:
        currPos = adjust.getPos()
      End Routine:
        thisExp.addData('luminance_response',np.exp(5*currPos[1]))
        thisExp.addData('luminance_target',np.exp(-1))
    GratingComponent grating_2
      contrast [set every frame] = np.exp(5*currPos[1])
      mask = raisedCos
      phase [set every repeat] = 360*np.random.rand()
      pos [set every repeat] = (control*.15, 0)
      saveStartStop = False
      sf = 1
      size = (0.15, 0.15)
      startVal [time (s)] = 0.25
      tex = sin
      texture resolution = 512
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    PolygonComponent polygon
      fillColor = black
      lineColor = black
      ori [set every repeat] = control*90
      saveStartStop = False
      shape = arrow
      size = (0.015, 0.015)
      startVal [time (s)] = 0.0
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    KeyboardComponent finish
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.25
      store = nothing
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  Routine instructions
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    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This experiment will use the method of adjustment.

        On each trial you will fixate on the center mark.  There will be two stimuli.  An arrow will point to the the stimulus you can control.  You will control it by moving your mouse up and down (or moving your finger up and down on your trackpad)  Adjust the contrast of that stimulus to match the target stimulus.  Press space to proceed to the next trial.


        Press the space bar to begin.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = method-of-adjustment.csv
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('direction', 1), ('control', 1)]),
      OrderedDict([('direction', -1), ('control', 1)]),
      OrderedDict([('direction', 1), ('control', -1)]),
      OrderedDict([('direction', -1), ('control', -1)])]
    Routine trial
  LoopTerminator trials
