PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  expName = method_of_constant_stimuli
  keyboardBackend = PsychToolbox
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    GratingComponent grating
      contrast [set every repeat] = contrast
      mask = raisedCos
      phase [set every repeat] = 360*np.random.rand()
      sf = 1
      size = (0.25, 0.25)
      startVal [time (s)] = $np.random.rand()*.15+.1
      stopVal [duration (s)] = .5
      tex = sin
      texture resolution = 512
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    PolygonComponent stimulus_window
      fillColor = none
      lineColor = black
      lineWidth = 5
      saveStartStop = False
      shape = circle
      size = (.5,.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent response
      allowedKeys = 'up','down'
      forceEndRoutine = True
      startVal [time (s)] = 0.75
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    NoiseStimComponent noise plugin="psychopy-visionscience"
      blendmode = add
      contrast = .001
      filter = None
      imageComponent = Phase
      interpolate = nearest
      noiseBW = 1
      noiseBWO = 30
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 2
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = N-frames
      noiseNewSampleWhen = 5
      noiseOri = 0.0
      noiseType = Uniform
      saveStartStop = False
      sf = None
      size = (256, 256)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent polygon
      fillColor = none
      lineColor = green
      lineWidth = 10
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.75
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  Routine begin_experiment
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    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        On each trial, a grating might appear in the circle. When the circle turns green, you should press up if there was a grating and down if there was no stimulus.

        Press the space bar to begin.
    KeyboardComponent start_exp_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine begin_experiment
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = yes_no_conditions.csv
    loopType = random
    nReps = 30
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    conditions:
      [OrderedDict([('contrast', 0.0)]),
      OrderedDict([('contrast', 0.015625)]),
      OrderedDict([('contrast', 0.03125)]),
      OrderedDict([('contrast', 0.0625)]),
      OrderedDict([('contrast', 0.125)]),
      OrderedDict([('contrast', 0.25)]),
      OrderedDict([('contrast', 0.5)]),
      OrderedDict([('contrast', 0.9)])]
    Routine trial
  LoopTerminator trials
