PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  expName = method-of-limits
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    GratingComponent grating
      contrast [set every frame] = np.exp(-5+direction*(5-2*t))
      mask = raisedCos
      phase [set every repeat] = 360*np.random.rand()
      sf = 1
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      tex = sin
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    KeyboardComponent limit_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        last_luminance=np.exp(-5+direction*(5-2*t))
        thisExp.addData('response',last_luminance)
  Routine instructions
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    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This experiment will use the method of limits.

        There are two types of trials: (1) decreasing, and (2) increasing.

        Press the space bar to begin the trial.

        On a decreasing trial, a down arrow will appear. Press the space bar again to indicate that the target has disappeared.

        On an increasing trial, an up arrow will appear. Press the space bar again to indicate that the target has appeared.

        Press the space bar to begin.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cue
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    PolygonComponent polygon
      fillColor = white
      ori [set every repeat] = -90*(direction+1)
      saveStartStop = False
      shape = arrow
      size = (0.25, 0.25)
      startVal [time (s)] = .1*np.random.rand()+.15
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    KeyboardComponent start_trial
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = .2
      store = nothing
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = method-of-limits-conditions.csv
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('direction', 1)]),
      OrderedDict([('direction', -1)])]
    Routine cue
    Routine trial
  LoopTerminator trials
