PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  expName = contrast_sensitivity
  keyboardBackend = PsychToolbox
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    GratingComponent grating
      contrast [set every repeat] = contrast
      mask = gauss
      phase [set every repeat] = 360*np.random.rand()
      pos [set every repeat] = (location*.35, 0)
      saveStartStop = False
      sf [set every repeat] = n_cycles
      size [set every repeat] = (.2,.2)
      startVal [time (s)] = .1
      stopVal [duration (s)] = .5
      tex = sin
      texture resolution = 512
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    PolygonComponent fixation
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .6
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    KeyboardComponent response
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.6
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    PolygonComponent fixation_response
      fillColor = green
      lineColor = green
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.6
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  Routine begin_experiment
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    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        On each trial, a grating might appear on the left or right of the fixation cross. When the cross turns green, you must indicate which side a stimulus appeared on using the left and right arrow keys.

        Press the space bar to begin.
    KeyboardComponent start_exp_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine begin_experiment
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = contrast-sensitivity.csv
    loopType = random
    nReps = 6
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    conditions:
      [OrderedDict([('contrast', 1e-08), ('location', 1), ('cpd', 1)]),
      OrderedDict([('contrast', 1e-06), ('location', 1), ('cpd', 1)]),
      OrderedDict([('contrast', 0.0001), ('location', 1), ('cpd', 1)]),
      OrderedDict([('contrast', 0.001), ('location', 1), ('cpd', 1)]),
      OrderedDict([('contrast', 0.01), ('location', 1), ('cpd', 1)]),
      OrderedDict([('contrast', 0.1), ('location', 1), ('cpd', 1)]),
      OrderedDict([('contrast', 1.0), ('location', 1), ('cpd', 1)]),
      OrderedDict([('contrast', 1e-08), ('location', -1), ('cpd', 1)]),
      OrderedDict([('contrast', 1e-06), ('location', -1), ('cpd', 1)]),
      OrderedDict([('contrast', 0.0001), ('location', -1), ('cpd', 1)]),
      OrderedDict([('contrast', 0.001), ('location', -1), ('cpd', 1)]),
      OrderedDict([('contrast', 0.01), ('location', -1), ('cpd', 1)]),
      OrderedDict([('contrast', 0.1), ('location', -1), ('cpd', 1)]),
      OrderedDict([('contrast', 1.0), ('location', -1), ('cpd', 1)]),
      OrderedDict([('contrast', 1e-08), ('location', 1), ('cpd', 2)]),
      OrderedDict([('contrast', 1e-06), ('location', 1), ('cpd', 2)]),
      OrderedDict([('contrast', 0.0001), ('location', 1), ('cpd', 2)]),
      OrderedDict([('contrast', 0.001), ('location', 1), ('cpd', 2)]),
      OrderedDict([('contrast', 0.01), ('location', 1), ('cpd', 2)]),
      OrderedDict([('contrast', 0.1), ('location', 1), ('cpd', 2)]),
      OrderedDict([('contrast', 1.0), ('location', 1), ('cpd', 2)]),
      OrderedDict([('contrast', 1e-08), ('location', -1), ('cpd', 2)]),
      OrderedDict([('contrast', 1e-06), ('location', -1), ('cpd', 2)])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
    Routine trial
  LoopTerminator trials
