PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = 05-adaptive-methods
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    CodeComponent easy_trials
      Code Type = Auto->JS
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      End Routine:
        if staircase.currentStaircase.thisTrialN == 6 and staircase.currentStaircase.condition['label']=='hi':
            staircase.currentStaircase.finished=True

        if staircase.currentStaircase.thisTrialN == 6 and staircase.currentStaircase.condition['label']=='lo':
            staircase.currentStaircase.finished=True
    GratingComponent grating
      mask = gauss
      sf = 2
      size = (.2,.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      tex = sin
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    GratingComponent grating_test
      mask = gauss
      ori [set every repeat] = level
      sf = 2
      size = (0.2, 0.2)
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = .5
      tex = sin
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 1.1
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    CodeComponent log_response
      Code Type = Auto->JS
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      End Routine:
        # update staircase
        if key_resp.keys == 'right' and level!=0:
            staircase.addResponse(1,level)
        elif key_resp.keys == 'left' and level==0:
            staircase.addResponse(1,level)
        else:
            staircase.addResponse(0,level)

        # log response direction
        if key_resp.keys == 'right':
            thisExp.addData('response','cw')
        else:
            thisExp.addData('response','ccw')
    TextComponent text_2
      color = green
      letterHeight = 0.05
      startVal [time (s)] = 1.1
      text = +
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  Routine begin_experiment
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    KeyboardComponent key_start
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is a two interval forced choice task (2IFC).  On each trial you will see two gratings.  The first will be perfectly vertical. The second will be tilted clockwise (right) or counter-clockwise (left).  Your job is to use the arrow buttons (left and right) to indicate which direction the second grating is tilted relative to the first.

        Press the space bar to start.
Flow
  Routine begin_experiment
  LoopInitiator staircase loopType="MultiStairHandler"
    conditionsFile = staircase_parameters.xlsx
    loopType = interleaved staircases
    nReps = 60
    stairType = simple
    switchMethod = random
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    conditions:
      [{'label': 'cw', 'nReps': 60, 'startVal': 10, 'maxVal': 15, 'minVal': 0, 'stepSizes': [2, 0.5], 'stepType': 'lin', 'nUp': 1, 'nDown': 2, 'nReversals': None},
      {'label': 'ccw', 'nReps': 60, 'startVal': -10, 'maxVal': 0, 'minVal': -15, 'stepSizes': [2, 0.5], 'stepType': 'lin', 'nUp': 2, 'nDown': 1, 'nReversals': None},
      {'label': 'hi', 'nReps': 6, 'startVal': 15, 'maxVal': 15, 'minVal': 15, 'stepSizes': 1, 'stepType': 'lin', 'nUp': 1, 'nDown': 2, 'nReversals': 0},
      {'label': 'lo', 'nReps': 6, 'startVal': -15, 'maxVal': -15, 'minVal': -15, 'stepSizes': 1, 'stepType': 'lin', 'nUp': 2, 'nDown': 1, 'nReversals': 0}]
    Routine trial
  LoopTerminator staircase
