PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  expName = speed-discrimination
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    DotsComponent dots_1
      coherence = 1.0
      dir = 0.0
      dotLife = 10
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = .4
      nDots = 100
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed [set every repeat] = speed1
      startVal [time (s)] = 0
      stopVal [duration (s)] = .5
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    DotsComponent dots_2
      coherence = 1.0
      dir = 0.0
      dotLife = 10
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = .4
      nDots = 100
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed [set every repeat] = speed2
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = .5
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    PolygonComponent circle_block
      fillColor = gray
      lineColor = gray
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent fixation
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.25
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    PolygonComponent fixation_green
      fillColor = green
      lineColor = green
      shape = cross
      size = (0.025, 0.025)
      startVal [time (s)] = 1.25
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    KeyboardComponent key_resp
      allowedKeys = 'up','down'
      forceEndRoutine = True
      startVal [time (s)] = 1.25
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  Routine begin_experiment
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    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is a 2IFC experiment. On each trial, there will be two intervals of dot motion. Your job will be to indicate whether the second interval is faster (up) or slower (down) than the first.

        Press space to begin the experiment.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine begin_experiment
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = speed-discrimination.csv
    loopType = random
    nReps = 10
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    conditions:
      [OrderedDict([('speed1', 0.0005), ('speed2', 0.004)]),
      OrderedDict([('speed1', 0.0005), ('speed2', 0.002)]),
      OrderedDict([('speed1', 0.0005), ('speed2', 0.001)]),
      OrderedDict([('speed1', 0.0005), ('speed2', 0.0005)]),
      OrderedDict([('speed1', 0.0005), ('speed2', 0.00025)]),
      OrderedDict([('speed1', 0.0005), ('speed2', 0.000125)]),
      OrderedDict([('speed1', 0.0005), ('speed2', 6.25e-05)]),
      OrderedDict([('speed1', -0.0005), ('speed2', -0.004)]),
      OrderedDict([('speed1', -0.0005), ('speed2', -0.002)]),
      OrderedDict([('speed1', -0.0005), ('speed2', -0.001)]),
      OrderedDict([('speed1', -0.0005), ('speed2', -0.0005)]),
      OrderedDict([('speed1', -0.0005), ('speed2', -0.00025)]),
      OrderedDict([('speed1', -0.0005), ('speed2', -0.000125)]),
      OrderedDict([('speed1', -0.0005), ('speed2', -6.25e-05)])]
    Routine trial
  LoopTerminator trials
