PsychoPy2experiment version="2025.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1512, 982]
  expName = speed-estimation
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    DotsComponent dots
      coherence = 1.0
      dir = 0.0
      dotLife = 30
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = .4
      nDots = 100
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed [set every repeat] = speed
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 1
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    PolygonComponent circle_block
      fillColor = gray
      lineColor = gray
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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    SliderComponent slider
      forceEndRoutine = False
      granularity = 0
      initVal = 2
      labels = ('slow', 'medium', 'fast')
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (.8, 0.05)
      startVal [time (s)] = 1.1
      styles = rating
      ticks = (1, 2, 3)
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    KeyboardComponent key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 1.1
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  Routine begin_experiment
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    TextComponent begin
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        On each trial you will see a fixation cross and some moving dots.  After the motion finishes, a slider will appear.  Move the slider left or right to indicate the speed

        [slow --- medium --- fast]

        Press enter when you have set the slider.

        Press space to start the experiment.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine begin_experiment
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = speed-estimation.csv
    loopType = random
    nReps = 10
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    conditions:
      [OrderedDict([('speed', 0.004)]),
      OrderedDict([('speed', 0.002)]),
      OrderedDict([('speed', 0.001)]),
      OrderedDict([('speed', 0.0005)]),
      OrderedDict([('speed', 0.00025)]),
      OrderedDict([('speed', 0.000125)]),
      OrderedDict([('speed', 6.25e-05)])]
    Routine trial
  LoopTerminator trials
