PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  color = $[-1,-1,-1]
  expName = 3d-motion-direction-estimation
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    PolygonComponent dot_1_r
      fillColor = red
      lineColor = red
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        dots_l = []

        dot_1_l = visual.ShapeStim(
            win=win, name='dot_1_l',
            size=(0.05, 0.05), vertices='circle',
            ori=0.0, pos=(0.1, 0), lineColor='blue', fillColor='blue')
      Begin Routine:
        trial.components.append(dot_1_l)
        print(trial.components)
      Each Frame:
        # if dot_1_r is starting this frame...
        if dot_1_l.status == NOT_STARTED and tThisFlip >= 0.0-frameTolerance:
            # keep track of start time/frame for later
            dot_1_l.frameNStart = frameN  # exact frame index
            dot_1_l.tStart = t  # local t and not account for scr refresh
            dot_1_l.tStartRefresh = tThisFlipGlobal  # on global time
            win.timeOnFlip(dot_1_l, 'tStartRefresh')  # time at next scr refresh
            # add timestamp to datafile
            thisExp.timestampOnFlip(win, 'dot_1_l.started')
            # update status
            dot_1_l.status = STARTED
            dot_1_l.setAutoDraw(True)

        # if dot_1_r is active this frame...
        if dot_1_l.status == STARTED:
            # update params
            pass

        # if dot_1_l is stopping this frame...
        if dot_1_l.status == STARTED:
            # is it time to stop? (based on global clock, using actual start)
            if tThisFlipGlobal > dot_1_l.tStartRefresh + 1.0-frameTolerance:
                # keep track of stop time/frame for later
                dot_1_l.tStop = t  # not accounting for scr refresh
                dot_1_l.tStopRefresh = tThisFlipGlobal  # on global time
                dot_1_l.frameNStop = frameN  # exact frame index
                # add timestamp to datafile
                thisExp.timestampOnFlip(win, 'dot_1_l.stopped')
                # update status
                dot_1_l.status = FINISHED
                dot_1_l.setAutoDraw(False)
Flow
  Routine trial
