PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  expName = 2d-motion-direction-discrimination
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    CodeComponent easy_trials
      Code Type = Auto->JS
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      End Routine:
        if staircase.currentStaircase.thisTrialN == 6 and staircase.currentStaircase.condition['label']=='hi':
            staircase.currentStaircase.finished=True

        if staircase.currentStaircase.thisTrialN == 6 and staircase.currentStaircase.condition['label']=='lo':
            staircase.currentStaircase.finished=True
    DotsComponent dots
      coherence = 1.0
      dir [set every repeat] = base_direction
      dotLife = 100
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = .25
      nDots = 50
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.002
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    DotsComponent dots_test
      coherence = 1.0
      dir [set every repeat] = base_direction+level
      dotLife = 100
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = .25
      nDots = 50
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.002
      startVal [time (s)] = .8
      stopVal [duration (s)] = .5
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 1.3
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    CodeComponent log_response
      Code Type = Auto->JS
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      End Routine:
        # update staircase
        if key_resp.keys == 'left' and level!=0:
            staircase.addResponse(1,level)
        elif key_resp.keys == 'right' and level==0:
            staircase.addResponse(1,level)
        else:
            staircase.addResponse(0,level)

        # log response direction
        if key_resp.keys == 'right':
            thisExp.addData('response','cw')
        else:
            thisExp.addData('response','ccw')
    TextComponent text_2
      color = green
      letterHeight = 0.05
      startVal [time (s)] = 1.3
      text = +
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  Routine begin_experiment
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    KeyboardComponent key_start
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is a two interval forced choice task (2IFC).  On each trial you will see two gratings.  The first will be either 45 degrees or 135 degrees. The second will be tilted clockwise (right) or counter-clockwise (left) relative to the first interval.  Your job is to use the arrow buttons (left and right) to indicate which direction the second grating is tilted relative to the first.

        Press the space bar to start.
Flow
  Routine begin_experiment
  LoopInitiator staircase loopType="MultiStairHandler"
    conditionsFile = staircase_parameters.xlsx
    loopType = interleaved staircases
    nReps = 40
    stairType = simple
    switchMethod = random
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    conditions:
      [{'label': 'cw', 'nReps': 40, 'startVal': 14, 'maxVal': 20, 'minVal': 0, 'stepSizes': 2, 'stepType': 'lin', 'nUp': 1, 'nDown': 2, 'nReversals': None, 'base_direction': 45},
      {'label': 'ccw', 'nReps': 40, 'startVal': -14, 'maxVal': 0, 'minVal': -20, 'stepSizes': 2, 'stepType': 'lin', 'nUp': 2, 'nDown': 1, 'nReversals': None, 'base_direction': 45},
      {'label': 'hi', 'nReps': 6, 'startVal': 14, 'maxVal': 20, 'minVal': 20, 'stepSizes': 1, 'stepType': 'lin', 'nUp': 1, 'nDown': 2, 'nReversals': 0, 'base_direction': 45},
      {'label': 'lo', 'nReps': 6, 'startVal': -14, 'maxVal': -20, 'minVal': -20, 'stepSizes': 1, 'stepType': 'lin', 'nUp': 2, 'nDown': 1, 'nReversals': 0, 'base_direction': 45},
      {'label': 'cw', 'nReps': 40, 'startVal': 14, 'maxVal': 20, 'minVal': 0, 'stepSizes': 2, 'stepType': 'lin', 'nUp': 1, 'nDown': 2, 'nReversals': None, 'base_direction': 135},
      {'label': 'ccw', 'nReps': 40, 'startVal': -14, 'maxVal': 0, 'minVal': -20, 'stepSizes': 2, 'stepType': 'lin', 'nUp': 2, 'nDown': 1, 'nReversals': None, 'base_direction': 135},
      {'label': 'hi', 'nReps': 6, 'startVal': 14, 'maxVal': 20, 'minVal': 20, 'stepSizes': 1, 'stepType': 'lin', 'nUp': 1, 'nDown': 2, 'nReversals': 0, 'base_direction': 135},
      {'label': 'lo', 'nReps': 6, 'startVal': -14, 'maxVal': -20, 'minVal': -20, 'stepSizes': 1, 'stepType': 'lin', 'nUp': 2, 'nDown': 1, 'nReversals': 0, 'base_direction': 135}]
    Routine trial
  LoopTerminator staircase
