PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = 2d-motion-direction-estimation
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    DotsComponent dots
      coherence = 1.0
      dir [set every repeat] = orientation
      dotLife = 100
      dotSize = 3
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = .5
      nDots = 100
      noiseDots = direction
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.005
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 1.0
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    PolygonComponent circle
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = circle
      size = (0.02, 0.02)
      startVal [time (s)] = 1.1
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    PolygonComponent pointer
      anchor = center-left
      fillColor = black
      lineColor = black
      ori [set every frame] = pointer_orientation
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.005)
      startVal [time (s)] = 1.1
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    CodeComponent pointer_code
      Code Type = Auto->JS
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      Begin Experiment:
        kb = keyboard.Keyboard()
      Begin Routine:
        pointer_orientation = np.round(np.random.rand()*180)*2
        # during your trial
        kb.clock.reset()  # when you want to start the timer from
      Each Frame:
        keys = kb.getKeys(['right', 'left','up','down'], clear=False, waitRelease=False)

        for key in keys:
            if key.duration is None:
                if key.value=='left':
                    pointer_orientation -=2

                elif key.value=='right':
                    pointer_orientation +=2

                elif (key.value=='up') and ((t-key.tDown )<1/60):
                    pointer_orientation +=1

                elif (key.value=='down') and ((t-key.tDown )<1/60):
                    pointer_orientation -=1

        pointer_orientation %= 360
      End Routine:
        thisExp.addData('pointer_orientation',pointer_orientation)
        thisExp.addData('orientation',orientation)
        thisExp.nextEntry()
    KeyboardComponent key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1.1
      store = nothing
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  Routine begin_experiment
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    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = On each trial there will be a period of motion.  when the motion disappears, a controller will appear.  You can use the left or right arrows to move it quickly around the circle. You can use the up or down arrows to move it slowly around the circle.
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine begin_experiment
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = 2d-motion-direction.xlsx
    isTrials = False
    loopType = random
    nReps = 7
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    conditions:
      [{'orientation': 0},
      {'orientation': 22.5},
      {'orientation': 45},
      {'orientation': 67.5},
      {'orientation': 90},
      {'orientation': 112.5},
      {'orientation': 135},
      {'orientation': 157.5},
      {'orientation': 180},
      {'orientation': 202.5},
      {'orientation': 225},
      {'orientation': 247.5},
      {'orientation': 270},
      {'orientation': 292.5},
      {'orientation': 315},
      {'orientation': 337.5}]
    Routine trial
  LoopTerminator trials
