PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = motion-adaptation
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    DotsComponent dots
      coherence [set every repeat] = coherence
      dir [set every repeat] = direction
      dotLife = 10
      dotSize = 3
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = .5
      nDots = 50
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.002
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = .3
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = .6
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    PolygonComponent polygon
      fillColor = gray
      lineColor = gray
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .6
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    PolygonComponent fixation
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .6
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    PolygonComponent fixation_respond
      fillColor = green
      lineColor = green
      shape = cross
      size = (0.025, 0.025)
      startVal [time (s)] = .6
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  Routine begin_experiment
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    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        For the first 30 seconds of the experiment, you will fixate while a drifting grating moves to the right.  Then the trials will begin.  On each trial, look at the fixation cross during. The stimulus (motion) will appear surrounding fixation.  When the fixation cross turns green, press left or right to indicate which direction the motion was moving.

        After a few trials, there will be another drifting grating for a few seconds.

        Press space to start the experiment.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine adaptation
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    GratingComponent grating_adaptation
      mask = gauss
      phase [set every frame] = t*1.5
      saveStartStop = False
      sf = 3
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      tex = sin
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    DotsComponent dots_adaptation
      coherence [set every repeat] = 1
      dir [set every repeat] = 0
      disabled = True
      dotLife = 10
      dotSize = 3
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = .5
      nDots = 50
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.002
      startVal [time (s)] = 0
      stopVal [duration (s)] = 30
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    PolygonComponent polygon_adaptation
      fillColor = gray
      lineColor = gray
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    PolygonComponent fixation_adaptation
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine top_up_adaptation
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if (thisTrial.thisN+1) % 4 == 0:
            duration = 5
        else:
            duration = 0
    GratingComponent grating_top
      mask = gauss
      phase [set every frame] = t*1.5
      saveStartStop = False
      sf = 3
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = duration
      tex = sin
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    DotsComponent dots_top
      coherence [set every repeat] = 1
      dir [set every repeat] = 0
      disabled = True
      dotLife = 10
      dotSize = 3
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = .5
      nDots = 50
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.002
      startVal [time (s)] = 0
      stopVal [duration (s)] = duration
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    PolygonComponent polygon_top
      fillColor = gray
      lineColor = gray
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = duration
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    PolygonComponent fixation_top
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = duration
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Flow
  Routine begin_experiment
  Routine adaptation
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = motion-adaptation.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [{'coherence': 1, 'direction': 0},
      {'coherence': 0.5, 'direction': 0},
      {'coherence': 0.4, 'direction': 0},
      {'coherence': 0.3, 'direction': 0},
      {'coherence': 0.2, 'direction': 0},
      {'coherence': 0.1, 'direction': 0},
      {'coherence': 0, 'direction': 0},
      {'coherence': 1, 'direction': 180},
      {'coherence': 0.5, 'direction': 180},
      {'coherence': 0.4, 'direction': 180},
      {'coherence': 0.3, 'direction': 180},
      {'coherence': 0.2, 'direction': 180},
      {'coherence': 0.1, 'direction': 180},
      {'coherence': 0, 'direction': 180}]
    Routine top_up_adaptation
    Routine trial
  LoopTerminator trials
