PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = motion-experiment
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    DotsComponent dots
      coherence [set every repeat] = coherence
      dir [set every repeat] = direction
      dotLife = 10
      dotSize = 3
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = .5
      nDots = 50
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.002
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = .5
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    PolygonComponent fixation_circle
      fillColor = gray
      lineColor = gray
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .6
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    PolygonComponent fixation_cross
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .6
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    PolygonComponent fixation_green
      fillColor = green
      lineColor = green
      shape = cross
      size = (0.025, 0.025)
      startVal [time (s)] = 0.6
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.6
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  Routine begin_experiment
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Here are the instructions
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine begin_experiment
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [{'direction': 0, 'coherence': 0},
      {'direction': 0, 'coherence': 0.2},
      {'direction': 0, 'coherence': 0.4},
      {'direction': 0, 'coherence': 0.6},
      {'direction': 0, 'coherence': 0.8},
      {'direction': 0, 'coherence': 1},
      {'direction': 180, 'coherence': 0},
      {'direction': 180, 'coherence': 0.2},
      {'direction': 180, 'coherence': 0.4},
      {'direction': 180, 'coherence': 0.6},
      {'direction': 180, 'coherence': 0.8},
      {'direction': 180, 'coherence': 1}]
    Routine trial
  LoopTerminator trials
