PsychoPy2experiment version="2024.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  expName = Bonnen2015_2afc
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    NoiseStimComponent noise plugin="psychopy-visionscience"
      blendmode = add
      contrast = .5
      filter = None
      imageComponent = Phase
      interpolate = nearest
      noiseBW = 1
      noiseBWO = 30
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.0625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = N-frames
      noiseNewSampleWhen = 1
      noiseOri = 0.0
      noiseType = White
      sf = None
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = .75
      texture resolution = 512
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    NoiseStimComponent noise_2 plugin="psychopy-visionscience"
      blendmode = add
      contrast = .5
      filter = None
      imageComponent = Phase
      interpolate = nearest
      noiseBW = 1
      noiseBWO = 30
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.0625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = Repeat
      noiseOri = 0.0
      noiseType = White
      sf = None
      size = (1, 1)
      startVal [time (s)] = .75
      texture resolution = 512
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    GratingComponent blob_1
      blendmode = add
      contrast [set every repeat] = .5*blobHeight
      mask = gauss
      ori = 45
      phase = .25
      pos [set every frame] = (0,0)
      sf = 1
      size [set every repeat] = $blobWidth*np.ones((2,))
      startVal [time (s)] = .1
      stopVal [duration (s)] = .25
      tex [set every repeat] = $np.ones((512,512))
      texture resolution = 512
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    GratingComponent blob_2
      blendmode = add
      contrast [set every repeat] = .5*blobHeight
      mask = gauss
      ori = 45
      phase = .25
      pos [set every frame] = (offset,0)
      sf = 1
      size [set every repeat] = $blobWidth*np.ones((2,))
      startVal [time (s)] = 0.45
      stopVal [duration (s)] = .25
      tex [set every repeat] = $np.ones((512,512))
      texture resolution = 512
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = .75
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  Routine Wait
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    TextComponent start_trial_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        On each trial, two blob stimuli will be presented in sequence. You should report whether the second blob left or right of the first blob.

        Press space to continue
    KeyboardComponent start_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Wait
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Bonnen2015Conditions2AFC.csv
    loopType = random
    nReps = 3
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    conditions:
      [OrderedDict([('blobHeight', 1.0), ('blobWidth', 0.07), ('offset', 0.0)]),
      OrderedDict([('blobHeight', 0.4188), ('blobWidth', 0.17), ('offset', 0.0)]),
      OrderedDict([('blobHeight', 0.2593), ('blobWidth', 0.27), ('offset', 0.0)]),
      OrderedDict([('blobHeight', 0.1892), ('blobWidth', 0.37), ('offset', 0.0)]),
      OrderedDict([('blobHeight', 1.0), ('blobWidth', 0.07), ('offset', 0.01)]),
      OrderedDict([('blobHeight', 0.4188), ('blobWidth', 0.17), ('offset', 0.01)]),
      OrderedDict([('blobHeight', 0.2593), ('blobWidth', 0.27), ('offset', 0.01)]),
      OrderedDict([('blobHeight', 0.1892), ('blobWidth', 0.37), ('offset', 0.01)]),
      OrderedDict([('blobHeight', 1.0), ('blobWidth', 0.07), ('offset', 0.02)]),
      OrderedDict([('blobHeight', 0.4188), ('blobWidth', 0.17), ('offset', 0.02)]),
      OrderedDict([('blobHeight', 0.2593), ('blobWidth', 0.27), ('offset', 0.02)]),
      OrderedDict([('blobHeight', 0.1892), ('blobWidth', 0.37), ('offset', 0.02)]),
      OrderedDict([('blobHeight', 1.0), ('blobWidth', 0.07), ('offset', 0.04)]),
      OrderedDict([('blobHeight', 0.4188), ('blobWidth', 0.17), ('offset', 0.04)]),
      OrderedDict([('blobHeight', 0.2593), ('blobWidth', 0.27), ('offset', 0.04)]),
      OrderedDict([('blobHeight', 0.1892), ('blobWidth', 0.37), ('offset', 0.04)]),
      OrderedDict([('blobHeight', 1.0), ('blobWidth', 0.07), ('offset', 0.08)]),
      OrderedDict([('blobHeight', 0.4188), ('blobWidth', 0.17), ('offset', 0.08)]),
      OrderedDict([('blobHeight', 0.2593), ('blobWidth', 0.27), ('offset', 0.08)])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
    Routine trial
  LoopTerminator trials
