PsychoPy2experiment version="2025.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Save psydat file = False
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = contrast-detection
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    GratingComponent grating
      contrast [set every repeat] = contrast_1
      mask = gauss
      sf = 4
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      tex = sin
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    GratingComponent grating_2
      contrast [set every repeat] = contrast_2
      mask = gauss
      sf = 4
      size = (0.5, 0.5)
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = .5
      tex = sin
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    NoiseStimComponent noise plugin="psychopy-visionscience"
      blendmode = add
      contrast = .2
      filter = None
      imageComponent = Phase
      interpolate = nearest
      noiseBW = 1
      noiseBWO = 30
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.00625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = None
      noiseNewSampleWhen = 1
      noiseOri = 0.0
      noiseType = Normal
      sf = None
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    NoiseStimComponent noise_2 plugin="psychopy-visionscience"
      blendmode = add
      contrast = .2
      filter = None
      imageComponent = Phase
      interpolate = nearest
      noiseBW = 1
      noiseBWO = 30
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.00625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = None
      noiseNewSampleWhen = 1
      noiseOri = 0.0
      noiseType = Normal
      sf = None
      size = (1, 1)
      startVal [time (s)] = .6
      stopVal [duration (s)] = .5
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    KeyboardComponent key_resp
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 1.1
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = contrast-detection-2ifc.csv
    loopType = random
    nReps = 10
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    conditions:
      [OrderedDict([('contrast_1', np.float64(0.0001)), ('contrast_2', np.float64(0.0))]),
      OrderedDict([('contrast_1', np.float64(0.001)), ('contrast_2', np.float64(0.0))]),
      OrderedDict([('contrast_1', np.float64(0.01)), ('contrast_2', np.float64(0.0))]),
      OrderedDict([('contrast_1', np.float64(0.03)), ('contrast_2', np.float64(0.0))]),
      OrderedDict([('contrast_1', np.float64(0.1)), ('contrast_2', np.float64(0.0))]),
      OrderedDict([('contrast_1', np.float64(0.3)), ('contrast_2', np.float64(0.0))]),
      OrderedDict([('contrast_1', np.float64(0.6)), ('contrast_2', np.float64(0.0))]),
      OrderedDict([('contrast_1', np.float64(0.0)), ('contrast_2', np.float64(0.0001))]),
      OrderedDict([('contrast_1', np.float64(0.0)), ('contrast_2', np.float64(0.001))]),
      OrderedDict([('contrast_1', np.float64(0.0)), ('contrast_2', np.float64(0.01))]),
      OrderedDict([('contrast_1', np.float64(0.0)), ('contrast_2', np.float64(0.03))]),
      OrderedDict([('contrast_1', np.float64(0.0)), ('contrast_2', np.float64(0.1))]),
      OrderedDict([('contrast_1', np.float64(0.0)), ('contrast_2', np.float64(0.3))]),
      OrderedDict([('contrast_1', np.float64(0.0)), ('contrast_2', np.float64(0.6))])]
    Routine trial
  LoopTerminator trials
