PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  expName = 3d-motion-direction-estimation
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    CodeComponent dot_motion
      Code Type = Auto->JS
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      Before Experiment:
        from dotMotion import CoherentMotionFactory, TrueProjector
      Begin Experiment:
        nDots = 1
        cubeSize = 3 # cm
        motionGenerator = CoherentMotionFactory(cubeSize,nDots)
      Begin Routine:
        speed = .1 # pixels per frame
        rng = np.random
        theta = 0
        phi = 0
        totFrames = 1000
        X,Y,Z = motionGenerator.generate(rng, speed, theta, phi, totFrames)

        # Define projection parameters
        screenDist = 60.0   # Distance from the screen
        ipd = 6.5            # Inter-pupillary distance
        eye = (0, 0)         # Eye position (x, y)

        # Compute the 2D projections for the left and right eye
        lx_p, rx_p, y_p = TrueProjector.project(X, Y, Z, screenDist, ipd, eye)

        print(lx_p[0,0],rx_p[0,0])

        # convert to units of screen height
        lx_p/=20
        rx_p/=20
        y_p/=20
      Each Frame:
        if dotsL[0].status == STARTED:
            # update
            pass
        #    for ii,dot in enumerate(dotsL):
        #        dot.pos = (lx_p[ii,frameN],y_p[ii,frameN])
        #    for ii,dot in enumerate(dotsR):
        #        dot.pos = (rx_p[ii,frameN],y_p[ii,frameN])
    CodeComponent dot_appearance
      Code Type = Auto->JS
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      Begin Routine:
        dotsL = []
        dotsR = []
        for ii in range(nDots):
            left = visual.ShapeStim(
                win=win, name='dot_left_'+str(ii),
                size=(0.05, 0.05), vertices='circle',
                ori=0.0, pos=(lx_p[ii,0],y_p[ii,0]), lineColor=[0,0,1], fillColor=[0,0,1])
            dotsL.append(left)
            right = visual.ShapeStim(
                win=win, name='dot_left_'+str(ii),
                size=(0.05, 0.05), vertices='circle',
                ori=0.0, pos=(rx_p[ii,0],y_p[ii,0]), lineColor=[1,0,0], fillColor=[1,0,0])
            dotsR.append(right)

        trial.components = trial.components+dotsL+dotsR
      Each Frame:
        # if dot_1_r is starting this frame...

        for dot in dotsL+dotsR:
            if dot.status == NOT_STARTED and tThisFlip >= 0.0-frameTolerance:
                # keep track of start time/frame for later
                dot.frameNStart = frameN  # exact frame index
                dot.tStart = t  # local t and not account for scr refresh
                dot.tStartRefresh = tThisFlipGlobal  # on global time
                win.timeOnFlip(dot, 'tStartRefresh')  # time at next scr refresh

                # update status
                dot.status = STARTED
                dot.setAutoDraw(True)


            # if dot_1_l is stopping this frame...
            if dot.status == STARTED:
                # is it time to stop? (based on global clock, using actual start)
                if tThisFlipGlobal > dot.tStartRefresh + 60.0-frameTolerance:
                    # keep track of stop time/frame for later
                    dot.tStop = t  # not accounting for scr refresh
                    dot.tStopRefresh = tThisFlipGlobal  # on global time
                    dot.frameNStop = frameN  # exact frame index
                    # update status
                    dot.status = FINISHED
                    dot.setAutoDraw(False)
    PolygonComponent polygon
      disabled = True
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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Flow
  Routine trial
